<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cf="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:p2="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="NestedWorkflow">
        <Name>StartSession</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="cf:BehaviorCommand">
              <cf:Type>StartCamera</cf:Type>
              <cf:Mask>Digital1</cf:Mask>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="cf:BehaviorCommand">
              <cf:Type>ClearOutput</cf:Type>
              <cf:Mask>Port1</cf:Mask>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="cf:BehaviorCommand">
              <cf:Type>ClearOutput</cf:Type>
              <cf:Mask>Port0</cf:Mask>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1500</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="cf:BehaviorCommand">
              <cf:Type>SetOutput</cf:Type>
              <cf:Mask>Digital2</cf:Mask>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT3S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="8" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="8" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source4" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Root</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>HarpData.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>File_pref</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="BehavPort" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM9</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>MessageBytes</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Users\aDMIN\Desktop\Joaquim\FNC_March_2023\data\Mtest\Mtest_ses11_baseline_cond_1_2023-03-29-123709_HarpData.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:MulticastTimestamp.bonsai">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateHarpMessage">
          <harp:MessageType>Write</harp:MessageType>
          <harp:Address>32</harp:Address>
          <harp:PayloadType>U8</harp:PayloadType>
          <harp:Payload>0</harp:Payload>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:IgnoreElements" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT10S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Finish_session</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Session Stop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="cf:BehaviorCommand">
              <cf:Type>StopCamera</cf:Type>
              <cf:Mask>Digital1</cf:Mask>
            </Expression>
            <Expression xsi:type="cf:BehaviorCommand">
              <cf:Type>ClearOutput</cf:Type>
              <cf:Mask>Port1</cf:Mask>
            </Expression>
            <Expression xsi:type="cf:BehaviorCommand">
              <cf:Type>ClearOutput</cf:Type>
              <cf:Mask>Port0</cf:Mask>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="4" Label="Source2" />
            <Edge From="3" To="4" Label="Source3" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Trial</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Trial</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>ITI</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT5.3133999S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Reward</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Root</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>File_pref</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>TrialP1.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\aDMIN\Desktop\Joaquim\FNC_March_2023\data\Mtest\Mtest_ses11_baseline_cond_1_2023-03-29-123709_TrialP1.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Random_flavor</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateDiscreteUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Which_flavor?</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Reward</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="cf:BehaviorEvent">
        <cf:Type>Input</cf:Type>
        <cf:Mask>Poke1InfraRedBeam</cf:Mask>
      </Expression>
      <Expression xsi:type="BitwiseNot" />
      <Expression xsi:type="BehaviorSubject">
        <Name>Licks_P1</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>43</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>U8</harp:Type>
        <harp:IsArray>false</harp:IsArray>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>HE_P1</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Constants</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Behavior" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Behavior</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="path_out" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\aDMIN\Desktop\anaf\Dlight_nutrients\data\M24393\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>PathOut</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="mouse_name" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Mtest</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Mouse</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="session" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="BehaviorSubjectBuilder,sys:String">
              <MemberName>Name</MemberName>
              <Value>11</Value>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>session</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="File_prefix" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\aDMIN\Desktop\Joaquim\FNC_March_2023\data\Mtest\Mtest_ses11_baseline_cond_1_2023-03-29-123709_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>File_pref</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:TimestampSubject.bonsai">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Commands_FlavorA</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Root</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Oral_FlavorA.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>File_pref</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="FlavorA" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM23</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>FlavorA</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>MessageBytes</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Users\aDMIN\Desktop\Joaquim\FNC_March_2023\data\Mtest\Mtest_ses11_baseline_cond_1_2023-03-29-123709_Oral_FlavorA.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="cf:SyringePumpCommand">
              <cf:Type>ProtocolDirection</cf:Type>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>59</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="cf:SyringePumpCommand">
              <cf:Type>ProtocolNumberOfSteps</cf:Type>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ByteProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="cf:SyringePumpCommand">
              <cf:Type>MotorMicrostep</cf:Type>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>10</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="cf:SyringePumpCommand">
              <cf:Type>ProtocolStepsPeriod</cf:Type>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="8" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="8" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source4" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Commands_FlavorA</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="cf:SyringePumpCommand">
              <cf:Type>ProtocolDirection</cf:Type>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>59</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="cf:SyringePumpCommand">
              <cf:Type>ProtocolNumberOfSteps</cf:Type>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ByteProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="cf:SyringePumpCommand">
              <cf:Type>MotorMicrostep</cf:Type>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>10</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="cf:SyringePumpCommand">
              <cf:Type>ProtocolStepsPeriod</cf:Type>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="8" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="8" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source4" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Commands_FlavorB</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Commands_FlavorB</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Root</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Oral_FlavorB.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>File_pref</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="FlavorB" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM22</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>FlavorB</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>MessageBytes</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Users\aDMIN\Desktop\Joaquim\FNC_March_2023\data\Mtest\Mtest_ses11_baseline_cond_1_2023-03-29-123709_Oral_FlavorB.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Reward</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Licks_P1</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="LogicalAnd" />
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BitwiseNot" />
      <Expression xsi:type="MulticastSubject">
        <Name>Reward</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Root</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>File_pref</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Reward_P1.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Which_flavor?</Name>
      </Expression>
      <Expression xsi:type="scr:PythonTransform">
        <scr:Script>@returns(str)
def process(value):
  if value==0:
    Flavor='Flavor_A'
  if value==1:
    Flavor='Flavor_B'
  return Flavor</scr:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\aDMIN\Desktop\Joaquim\FNC_March_2023\data\Mtest\Mtest_ses11_baseline_cond_1_2023-03-29-123709_Reward_P1.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Trial</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>FlavorA</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Which_flavor?</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="cf:SyringePumpCommand">
        <cf:Type>EnableProtocol</cf:Type>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands_FlavorA</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="MulticastSubject">
        <Name>FA_Total</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>FlavorB</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Which_flavor?</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="cf:SyringePumpCommand">
        <cf:Type>EnableProtocol</cf:Type>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands_FlavorB</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="MulticastSubject">
        <Name>FB_Total</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Root</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>File_pref</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>MovieTS.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Index" DisplayName="IndexCam" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:FlyCapture">
          <p2:Index>1</p2:Index>
          <p2:ColorProcessing>Default</p2:ColorProcessing>
          <p2:NumBuffers>10</p2:NumBuffers>
          <p2:GrabMode>BufferFrames</p2:GrabMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="path_videopipe" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT2S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\videopipe1</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>false</cv:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata.embeddedTimeStamp,Metadata.embeddedFrameCounter</Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\aDMIN\Desktop\Joaquim\FNC_March_2023\data\Mtest\Mtest_ses11_baseline_cond_1_2023-03-29-123709_MovieTS.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>exponential cue time</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT1S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateExponential">
                      <p1:Rate>0.1</p1:Rate>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="IntProperty">
                      <Value>10000000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="LessThanOrEqual">
                          <Operand xsi:type="DoubleProperty">
                            <Value>200000000</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="DoubleProperty">
                            <Value>50000000</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>ITI</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Reward</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateHarpMessage">
          <harp:MessageType>Write</harp:MessageType>
          <harp:Address>32</harp:Address>
          <harp:PayloadType>U8</harp:PayloadType>
          <harp:Payload>0</harp:Payload>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:IgnoreElements" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Commands_PI</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="PI" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM21</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>FA_Total</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>FB_Total</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FA_Total</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FB_Total</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="IntProperty">
          <Value>39</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Finish_session</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Finish_session</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source2" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="7" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="9" Label="Source2" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="10" Label="Source1" />
      <Edge From="7" To="11" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="25" To="34" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="33" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source2" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="39" To="46" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="55" To="60" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="63" Label="Source2" />
      <Edge From="59" To="60" Label="Source2" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="60" To="62" Label="Source1" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="65" To="66" Label="Source1" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="68" To="69" Label="Source1" />
      <Edge From="70" To="75" Label="Source1" />
      <Edge From="71" To="72" Label="Source1" />
      <Edge From="72" To="73" Label="Source1" />
      <Edge From="73" To="78" Label="Source2" />
      <Edge From="74" To="75" Label="Source2" />
      <Edge From="75" To="76" Label="Source1" />
      <Edge From="75" To="77" Label="Source1" />
      <Edge From="77" To="78" Label="Source1" />
      <Edge From="79" To="82" Label="Source2" />
      <Edge From="80" To="81" Label="Source1" />
      <Edge From="81" To="82" Label="Source1" />
      <Edge From="82" To="83" Label="Source1" />
      <Edge From="83" To="84" Label="Source1" />
      <Edge From="84" To="85" Label="Source1" />
      <Edge From="84" To="97" Label="Source1" />
      <Edge From="84" To="98" Label="Source1" />
      <Edge From="84" To="104" Label="Source1" />
      <Edge From="85" To="86" Label="Source1" />
      <Edge From="86" To="87" Label="Source1" />
      <Edge From="87" To="88" Label="Source1" />
      <Edge From="88" To="94" Label="Source1" />
      <Edge From="89" To="90" Label="Source1" />
      <Edge From="90" To="91" Label="Source1" />
      <Edge From="91" To="96" Label="Source2" />
      <Edge From="92" To="93" Label="Source1" />
      <Edge From="93" To="94" Label="Source2" />
      <Edge From="94" To="95" Label="Source1" />
      <Edge From="95" To="96" Label="Source1" />
      <Edge From="98" To="99" Label="Source1" />
      <Edge From="98" To="101" Label="Source1" />
      <Edge From="99" To="100" Label="Source1" />
      <Edge From="101" To="102" Label="Source1" />
      <Edge From="102" To="103" Label="Source1" />
      <Edge From="104" To="105" Label="Source1" />
      <Edge From="104" To="107" Label="Source1" />
      <Edge From="105" To="106" Label="Source1" />
      <Edge From="107" To="108" Label="Source1" />
      <Edge From="108" To="109" Label="Source1" />
      <Edge From="110" To="111" Label="Source1" />
      <Edge From="111" To="112" Label="Source1" />
      <Edge From="112" To="122" Label="Source2" />
      <Edge From="113" To="114" Label="Source1" />
      <Edge From="114" To="117" Label="Source1" />
      <Edge From="115" To="119" Label="Source2" />
      <Edge From="116" To="117" Label="Source2" />
      <Edge From="117" To="118" Label="Source1" />
      <Edge From="117" To="120" Label="Source1" />
      <Edge From="118" To="119" Label="Source1" />
      <Edge From="120" To="121" Label="Source1" />
      <Edge From="121" To="122" Label="Source1" />
      <Edge From="123" To="124" Label="Source1" />
      <Edge From="125" To="126" Label="Source1" />
      <Edge From="127" To="128" Label="Source1" />
      <Edge From="128" To="129" Label="Source1" />
      <Edge From="130" To="131" Label="Source2" />
      <Edge From="132" To="133" Label="Source1" />
      <Edge From="134" To="135" Label="Source1" />
      <Edge From="136" To="138" Label="Source2" />
      <Edge From="137" To="138" Label="Source1" />
      <Edge From="138" To="139" Label="Source1" />
      <Edge From="139" To="140" Label="Source1" />
      <Edge From="140" To="141" Label="Source1" />
      <Edge From="141" To="142" Label="Source1" />
      <Edge From="143" To="144" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>